<CompuCell3D Revision="5" Version="4.7.0">
   
   <Metadata>
      
      <!-- Basic properties simulation -->
      <NumberOfProcessors>8</NumberOfProcessors>
      <DebugOutputFrequency>10</DebugOutputFrequency>
      <!-- <NonParallelModule Name="Potts"/> -->
      <MCSConversionFactor DisplayName="No conversion" Units="-">1.0</MCSConversionFactor>
      <VoxelConversionFactor DisplayName="No conversion" Units="-">1.0</VoxelConversionFactor>
   </Metadata>
   
   <Potts>
      
      <!-- Basic properties of CPM (GGH) algorithm -->
      <Dimensions x="100" y="100" z="100"/>
      <Steps>2000</Steps>
      <Temperature>10.0</Temperature>
      <NeighborOrder>1</NeighborOrder>
      <Boundary_x>Periodic</Boundary_x>
      <Boundary_y>Periodic</Boundary_y>
      <Boundary_z>Periodic</Boundary_z>
   </Potts>
   
   <Plugin Name="CellType">
      
      <!-- Listing all cell types in the simulation -->
      <CellType TypeId="0" TypeName="Medium"/>
      <CellType Freeze="" TypeId="1" TypeName="Wall"/>
      <CellType TypeId="2" TypeName="Cell"/>
   </Plugin>
   
   <Plugin Name="Volume"/>
   
   <Plugin Name="ExternalPotential">
      
      <!-- External force applied to cell. Each cell has different force and force components have to be managed in Python. -->
      <!-- e.g. cell.lambdaVecX=0.5; cell.lambdaVecY=0.1 ; cell.lambdaVecZ=0.3; -->
      <Algorithm>CenterOfMassBased</Algorithm>
   </Plugin>
   
   <Plugin Name="CenterOfMass">
      
      <!-- Module tracking center of mass of each cell -->
   </Plugin>
   
   <Plugin Name="NeighborTracker">
      
      <!-- Module tracking neighboring cells of each cell -->
   </Plugin>
   
   <Plugin Name="PixelTracker">
      
      <!-- <Module tracking pixels of each cell>  -->


   </Plugin>
   
   <Plugin Name="Secretion">
   </Plugin>
   
   <Plugin Name="Contact">
      <!-- Specification of adhesion energies -->
      <Energy Type1="Medium" Type2="Medium">10.0</Energy>
      <Energy Type1="Medium" Type2="Wall">10.0</Energy>
      <Energy Type1="Medium" Type2="Cell">4.0</Energy>
      <Energy Type1="Wall" Type2="Wall">0.0</Energy>
      <Energy Type1="Wall" Type2="Cell">10.0</Energy>
      <Energy Type1="Cell" Type2="Cell">2.0</Energy>
      <NeighborOrder>4</NeighborOrder>
   </Plugin>
   
   <Steppable Type="DiffusionSolverFE">
      
      <!-- Specification of PDE solvers -->
      <DiffusionField Name="Nutr">
         <DiffusionData>
            <FieldName>Nutr</FieldName>
            <GlobalDiffusionConstant>1</GlobalDiffusionConstant>
            <GlobalDecayConstant>0.0</GlobalDecayConstant>
            <InitialConcentrationExpression>0.0</InitialConcentrationExpression>
            <DiffusionCoefficient CellType="Wall">1</DiffusionCoefficient>
            <DecayCoefficient CellType="Wall">0.0</DecayCoefficient>
            <DiffusionCoefficient CellType="Cell">0.5</DiffusionCoefficient>
            <DecayCoefficient CellType="Cell">0.0</DecayCoefficient>
         </DiffusionData>
         <SecretionData>
            <Uptake MaxUptake="0.0" RelativeUptakeRate="0.0" Type="Medium"/>
            <Uptake MaxUptake="0.0" RelativeUptakeRate="0.0" Type="Wall"/>
            <Uptake MaxUptake="0.0" RelativeUptakeRate="0.0" Type="Cell"/>
            <!-- When secretion is defined inside DiffusionSolverFE all secretion constants are scaled automatically to account for the extra calls to the diffusion step when handling large diffusion constants -->
            
            <!-- Uniform secretion Definition -->
            <!-- <Secretion Type="Wall">0.1</Secretion> -->
            <!-- <Secretion Type="Cell">0.1</Secretion> -->
            <!-- <SecretionOnContact SecreteOnContactWith="Wall,Cell" Type="Cell">0.2</SecretionOnContact> -->
            <!-- <ConstantConcentration Type="Cell">0.1</ConstantConcentration> -->
         </SecretionData>
         <BoundaryConditions>
            <Plane Axis="X">
               <Periodic/>
            </Plane>
            <Plane Axis="Y">
               <Periodic/>
            </Plane>
            <Plane Axis="Z">
               <Periodic/>
            </Plane>
         </BoundaryConditions>
      </DiffusionField>
      <DiffusionField Name="Degr">
         <DiffusionData>
            <FieldName>Degr</FieldName>
            <GlobalDiffusionConstant>1</GlobalDiffusionConstant>
            <GlobalDecayConstant>0.01</GlobalDecayConstant>
            <InitialConcentrationExpression>0.0</InitialConcentrationExpression>
            <DiffusionCoefficient CellType="Wall">1</DiffusionCoefficient>
            <DecayCoefficient CellType="Wall">0.01</DecayCoefficient>
            <DiffusionCoefficient CellType="Cell">1</DiffusionCoefficient>
            <DecayCoefficient CellType="Cell">1</DecayCoefficient>
         </DiffusionData>
         <SecretionData>
            <Uptake MaxUptake="0.0" RelativeUptakeRate="0.0" Type="Medium"/>
            <Uptake MaxUptake="0.0" RelativeUptakeRate="0.0" Type="Wall"/>
            <Uptake MaxUptake="0.0" RelativeUptakeRate="0.0" Type="Cell"/>
         </SecretionData>
         <BoundaryConditions>
            <Plane Axis="X">
               <Periodic/>
            </Plane>
            <Plane Axis="Y">
               <Periodic/>
            </Plane>
            <Plane Axis="Z">
               <Periodic/>
            </Plane>
         </BoundaryConditions>
      </DiffusionField>
   </Steppable>
   
   <Steppable Type="UniformInitializer">
      
      <!-- Initial layout of cells in the form of rectangular slab -->
      <!-- <Region> -->
         <!-- <BoxMin x="40" y="40" z="40"/> -->
         <!-- <BoxMax x="160" y="160" z="160"/> -->
         <!-- <Gap>0</Gap> -->
         <!-- <Width>7</Width> -->
         <!-- <Types>Wall,Cell</Types> -->
      <!-- </Region> -->
   </Steppable>
</CompuCell3D>
