<CompuCell3D Revision="5" Version="4.7.0">
   
   <Metadata>
      
      <!-- Basic properties simulation -->
      <NumberOfProcessors>2</NumberOfProcessors>
      <DebugOutputFrequency>10</DebugOutputFrequency>
      <!-- <NonParallelModule Name="Potts"/> -->
      <MCSConversionFactor DisplayName="hour" Units="hr">1.0</MCSConversionFactor>
      <VoxelConversionFactor DisplayName="micrometer" Units="um">1.0</VoxelConversionFactor>
   </Metadata>
   
   <Potts>
      
      <!-- Basic properties of CPM (GGH) algorithm -->
      <Dimensions x="656" y="256" z="1"/>
      <Steps>100000</Steps>
      <Temperature>10.0</Temperature>
      <NeighborOrder>1</NeighborOrder>
      <Boundary_x>Periodic</Boundary_x>
      <Boundary_y>Periodic</Boundary_y>
   </Potts>
   
   <Plugin Name="CellType">
      
      <!-- Listing all cell types in the simulation -->
      <CellType TypeId="0" TypeName="Medium"/>
      <CellType Freeze="" TypeId="1" TypeName="wall"/>
      <CellType TypeId="2" TypeName="NotActiv"/>
      <CellType TypeId="3" TypeName="Activ"/>
      <CellType TypeId="4" TypeName="Exaust"/>
   </Plugin>
   
   <Plugin Name="Volume"/>
   
   <Plugin Name="Surface"/>
   
   <Plugin Name="LengthConstraint"/>
   
   <Plugin Name="ExternalPotential">
   
   <!-- External force applied to cell. Each cell type has different force. -->
   <!-- For more flexible specification of the constraint (done in Python) please use ExternalPotential plugin without specifying per-type parameters -->
   <!-- Algorithm options are: PixelBased, CenterOfMassBased -->
   <Algorithm>CenterOfMassBased</Algorithm>
</Plugin>

   
   <Plugin Name="CenterOfMass">
      
      <!-- Module tracking center of mass of each cell -->
   </Plugin>
   
   <Plugin Name="NeighborTracker">
      
      <!-- Module tracking neighboring cells of each cell -->
   </Plugin>
   
   <Plugin Name="Contact">
      <!-- Specification of adhesion energies -->
      <Energy Type1="Medium" Type2="Medium">10.0</Energy>
      <Energy Type1="Medium" Type2="wall">10.0</Energy>
      <Energy Type1="Medium" Type2="NotActiv">10.0</Energy>
      <Energy Type1="Medium" Type2="Activ">10.0</Energy>
      <Energy Type1="Medium" Type2="Exaust">10.0</Energy>
      <Energy Type1="wall" Type2="wall">10.0</Energy>
      <Energy Type1="wall" Type2="NotActiv">10.0</Energy>
      <Energy Type1="wall" Type2="Activ">10.0</Energy>
      <Energy Type1="wall" Type2="Exaust">10.0</Energy>
      <Energy Type1="NotActiv" Type2="NotActiv">21.0</Energy>
      <Energy Type1="NotActiv" Type2="Activ">21.0</Energy>
      <Energy Type1="NotActiv" Type2="Exaust">21.0</Energy>
      <Energy Type1="Activ" Type2="Activ">21.0</Energy>
      <Energy Type1="Activ" Type2="Exaust">21.0</Energy>
      <Energy Type1="Exaust" Type2="Exaust">21.0</Energy>
      <NeighborOrder>4</NeighborOrder>
   </Plugin>

   <Plugin Name="ConnectivityGlobal">
   
   <!-- Connectivity constraint applied to each cell. Energy penalty specifies how strong the constraint is. Penalty is specified for each type  -->
   <!-- This constraint works in 2D and 3D on all type of lattices. It might be slowdown your simulation. For faster option - 2D and square lattice you may use Connectivity or ConnectivityLocalFlex -->
   <!-- To speed up simulation comment out unnecessary constraints for types which don't need the constraint -->
   <!-- By default we will always precheck connectivity BUT in simulations in which there is no risk of having unfragmented cell one can add this flag to speed up computations -->
   <!-- To turn off precheck uncomment line below -->
   <!-- <DoNotPrecheckConnectivity/> -->
   <Penalty Type="wall">1000000</Penalty>
   <Penalty Type="NotActiv">1000000</Penalty>
   <Penalty Type="Activ">1000000</Penalty>
   <Penalty Type="Exaust">1000000</Penalty>
</Plugin>

   
   
   <Steppable Type="UniformInitializer">
      
      <!-- Initial layout of cells in the form of rectangular slab -->
      <Region>
         <BoxMin x="151" y="51" z="0"/>
         <BoxMax x="504" y="104" z="1"/>
         <Gap>13</Gap>
         <Width>6</Width>
         <Types>NotActiv</Types>
      </Region>
   </Steppable>
</CompuCell3D>
