<CompuCell3D Revision="5" Version="4.7.0">
   
   <Metadata>
      
      <!-- Basic properties simulation -->
      <NumberOfProcessors>1</NumberOfProcessors>
      <DebugOutputFrequency>10</DebugOutputFrequency>
      <!-- <NonParallelModule Name="Potts"/> -->
      <MCSConversionFactor DisplayName="No conversion" Units="-">1.0</MCSConversionFactor>
      <VoxelConversionFactor DisplayName="No conversion" Units="-">1.0</VoxelConversionFactor>
   </Metadata>
   
   <Potts>
      
      <!-- Basic properties of CPM (GGH) algorithm -->
      <Dimensions x="50" y="50" z="1"/>
      <Steps>5000</Steps>
      <Temperature>10.0</Temperature>
      <NeighborOrder>1</NeighborOrder>
   </Potts>
   
   <Plugin Name="CellType">
      
      <!-- Listing all cell types in the simulation -->
      <CellType TypeId="0" TypeName="Medium"/>
      <CellType Freeze="" TypeId="1" TypeName="Wall"/>
      <CellType TypeId="2" TypeName="Cell"/>
   </Plugin>
   
   <Plugin Name="Volume"/>
   
   <Plugin Name="CenterOfMass">
      
      <!-- Module tracking center of mass of each cell -->
   </Plugin>
   
   <Plugin Name="NeighborTracker">
      
      <!-- Module tracking neighboring cells of each cell -->
   </Plugin>
   
   <Plugin Name="Contact">
      <!-- Specification of adhesion energies -->
      <Energy Type1="Medium" Type2="Medium">10.0</Energy>
      <Energy Type1="Medium" Type2="Wall">10.0</Energy>
      <Energy Type1="Medium" Type2="Cell">8.0</Energy>
      <Energy Type1="Wall" Type2="Wall">10.0</Energy>
      <Energy Type1="Wall" Type2="Cell">10.0</Energy>
      <Energy Type1="Cell" Type2="Cell">5.0</Energy>
      <NeighborOrder>4</NeighborOrder>
   </Plugin>
   
   <Plugin Name="Secretion">
   </Plugin>

   
   <Steppable Type="DiffusionSolverFE">
      
      <!-- Specification of PDE solvers -->
      <DiffusionField Name="Degr">
         <DiffusionData>
            <FieldName>Degr</FieldName>
            <GlobalDiffusionConstant>1</GlobalDiffusionConstant>
            <GlobalDecayConstant>0.01</GlobalDecayConstant>
            <InitialConcentrationExpression>0.0</InitialConcentrationExpression>
            <DiffusionCoefficient CellType="Wall">1</DiffusionCoefficient>
            <DecayCoefficient CellType="Wall">0.001</DecayCoefficient>
            <DiffusionCoefficient CellType="Cell">1</DiffusionCoefficient>
            <DecayCoefficient CellType="Cell">0.001</DecayCoefficient>
         </DiffusionData>
         <SecretionData>
            <Uptake MaxUptake="0.0" RelativeUptakeRate="0.0" Type="Medium"/>
            <Uptake MaxUptake="0.0" RelativeUptakeRate="0.0" Type="Wall"/>
            <Uptake MaxUptake="0.0" RelativeUptakeRate="0.0" Type="Cell"/>
            <!-- When secretion is defined inside DiffusionSolverFE all secretion constants are scaled automatically to account for the extra calls to the diffusion step when handling large diffusion constants -->
            
            <!-- Uniform secretion Definition -->
            <!-- <Secretion Type="Wall">0.1</Secretion> -->
            <!-- <Secretion Type="Cell">0.1</Secretion> -->
            <!-- <SecretionOnContact SecreteOnContactWith="Wall,Cell" Type="Cell">0.2</SecretionOnContact> -->
            <!-- <ConstantConcentration Type="Cell">0.1</ConstantConcentration> -->
         </SecretionData>
         <BoundaryConditions>
            <Plane Axis="X">
               <ConstantDerivative PlanePosition="Min" Value="0.0"/>
               <ConstantDerivative PlanePosition="Max" Value="0.0"/>
            </Plane>
            <Plane Axis="Y">
               <ConstantDerivative PlanePosition="Min" Value="0.0"/>
               <ConstantDerivative PlanePosition="Max" Value="0.0"/>
            </Plane>
         </BoundaryConditions>
      </DiffusionField>
   </Steppable>
   
   <Steppable Type="UniformInitializer">
      
      <!-- Initial layout of cells in the form of rectangular slab -->
      <Region>
         <BoxMin x="30" y="30" z="0"/>
         <BoxMax x="40" y="40" z="1"/>
         <Gap>0</Gap>
         <Width>7</Width>
         <Types>Cell</Types>
      </Region>
   </Steppable>
</CompuCell3D>
